OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)
Comment
  Signal
Comment
  Stim
Comment
  Scenarios :
  1. Only signal available (classification in the form of float value [-1 -- 1])
  2. Only stim available (classification in the form of int value [-1, 0, 1])
  3. Both available (both above are available)

  You can disable and enable the box based on the scenario you want to check.

Time signal
  Sampling frequency = 128
  Generated epoch sample count = 1
-> Simple DSP => #1
  Equation = sin(x)
Clock stimulator
  Interstimulation interval (in sec) = 2
  Stimulation = OVTK_StimulationId_Label_00
-> Events => #3
  Clock frequency (Hz) = 0
  Script = F:/MI-OV/Unity/Python_FakeStim.py
  Class1 = OVTK_GDF_Left
  Class2 = OVTK_StimulationId_Label_00
  Class3 = OVTK_GDF_Right
Graz Motor Imagery BCI Stimulator => #4
  Lua Script = ${Player_ScenarioDirectory}/MIBCI-Graz-Starter.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 5
  Wait For Beep Duration (in sec) = 0
  Wait For Cue Duration (in sec) = 0
  Display Cue Duration (in sec) = 2
  Feedback Duration (in sec) = 8
  End of Trial Minimum Duration (in sec) = 2
  End of Trial Maximum Duration (in sec) = 2
Input stimulations 1=#3, Input stimulations 2=#4 -> Stimulation multiplexer => #5
Input 1=#1, Input 2=#5 -> Unity LSL Communication => #6
  Input 1 Stream Name = ovOutSignal
  Input 2 Stream Name = ovOutMarkers
  Output 1 Stream Name = ovInSignal
  Output 2 Stream Name = ovInMarkers
Data=#1, Stimulations=#6.Output 2 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#6.Output 2 -> Player Controller "End Controller"
  Stimulation name = OVTK_GDF_End_Of_Session
  Action to perform = Stop
