OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)

Time signal => #0
  Sampling frequency = 256
  Generated epoch sample count = 1
-> Simple DSP => #1
  Equation = sin(x)
#0 -> Simple DSP => #2
  Equation = sin(x-1)
Input 1=#1, Input 2=#2 -> Signal Merger => #3
Graz Motor Imagery BCI Stimulator
  Lua Script = ${Player_ScenarioDirectory}/MIBCI-Graz-Starter.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 5
  Wait For Beep Duration (in sec) = 0
  Wait For Cue Duration (in sec) = 0
  Display Cue Duration (in sec) = 2
  Feedback Duration (in sec) = 8
  End of Trial Minimum Duration (in sec) = 2
  End of Trial Maximum Duration (in sec) = 2
-> Unity LSL Communication => #5
  Input 1 Stream Name = ovOutMarkers
  Output 1 Stream Name = ovInSignal
  Output 2 Stream Name = ovInMarkers
Data=#3, Stimulations=#5.Output 2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#5.Output 2 -> Player Controller "End Controller"
  Stimulation name = OVTK_GDF_End_Of_Session
  Action to perform = Stop
#5.Output 2 -> Window Epoch
  Clock frequency (Hz) = 0
  Script = ${Player_ScenarioDirectory}/Python_Unity_Record.py
  Path = ${Player_ScenarioDirectory}/record-[$core{date}].gdf
Signal=#3, Stimulation=#5.Output 2 -> GDF file writer
  Filename = ${Player_ScenarioDirectory}/demo-record-[$core{date}].gdf
#5.Output 2 -> 0x341d3912 Target Cue
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_StimulationId_Label_00
  Cue Image 1 = ${Path_Data}/plugins/simple-visualization/openvibe-simple-visualization-GrazVisualization-rightArrow.png
  Stimulation 1 = OVTK_GDF_Right
  Cue Image 2 = ${Path_Data}/plugins/simple-visualization/openvibe-simple-visualization-GrazVisualization-leftArrow.png
  Stimulation 2 = OVTK_GDF_Left
